PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  color = white
  expName = flanker_fish_2
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Routines
  Routine Prac3_instr
    TextComponent Pract3_instr_text
      color = black
      letterHeight = 0.04
      pos = (0, 0.41)
      startVal [time (s)] = 0.0
      text = BLÅ betyder at du skal fodre den MIDTERSTE fisk
      wrapWidth = 4
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    ImageComponent Pract3_instr_pic1
      image = blue_nod_R.bmp
      pos = (0.0, 0.25)
      size = (1.4, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent Prac3_pic2
      image = pink_nod_R.bmp
      pos = (0.0, -0.15)
      size = (1.4, 0.25)
      startVal [time (s)] = 0.0
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    KeyboardComponent Prac3_cont
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_5
      color = black
      letterHeight = 0.04
      pos = (0, 0.015)
      startVal [time (s)] = 0.0
      text = PINK betyder at du skal fodre de YDERSTE fisk 
      wrapWidth = 4
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    TextComponent text_6
      color = black
      letterHeight = 0.04
      pos = (0, -0.37)
      startVal [time (s)] = 0.0
      wrapWidth = 4
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      text:
        BLÅ - MIDTEN
        PINK - YDERST
  Routine Task1_instr
    TextComponent Task1_instr_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        FLOT!
        Lad os prøve at spille spillet rigtigt
    KeyboardComponent Task1_instr_cont
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Task2_instr
    TextComponent Task2_instr_text
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        FLOT!
        Lad os prøve at spille spillet rigtigt
    KeyboardComponent Task2_instr_cont
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Task3_instr
    TextComponent Task3_instr_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Lad os prøve at spille spillet rigtgt
      wrapWidth = 4
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    KeyboardComponent Task3_instr_cont
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Prac1
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        prac1_list = []

        jitter = random() * (0.5 - 0.3) + 0.3
        jitter = round(jitter, 1) # round to 1 decimal place
      End Routine:
        prac1_list.append(Prac1_resp.corr)

        prac1_trials.addData('prac1_list', prac1_list)
    TextComponent Prac1_fix
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter
      text = +
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    ImageComponent Prac1_stim
      image [set every repeat] = $blue_stim
      size = (1.5, 0.3)
      startVal [time (s)] = $jitter
      stopVal [duration (s)] = 2.0
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    KeyboardComponent Prac1_resp
      allowedKeys = 'lctrl','return'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = $jitter
      stopVal [duration (s)] = 2
      storeCorrect = True
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  Routine welcome
    TextComponent welcome_text
      color = black
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      wrapWidth = 4
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      text:
        I det her spil vil du se en masse fisk som dem her.
        Din opgave er at fodre den eller de sultne fisk!

        Du skal fodre den rigtige fisk så hurtigt som muligt
    ImageComponent welcome_pic
      image = blue_inc_L.bmp
      pos = (0, -0.0)
      size = (1.5, 0.3)
      startVal [time (s)] = 0.0
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    KeyboardComponent welcome_cont
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent welcome_pic2
      image = pink_inc_R.bmp
      pos = (0, -0.3)
      size = (1.5, 0.3)
      startVal [time (s)] = 0.0
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  Routine Task1
    TextComponent Task1_fix
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter
      text = +
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    ImageComponent Task1_stim
      image [set every repeat] = $blue_stim
      size = (1.5, 0.3)
      startVal [time (s)] = $jitter
      stopVal [duration (s)] = 2
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    KeyboardComponent Task1_resp
      allowedKeys = 'lctrl','return'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = $jitter
      stopVal [duration (s)] = 1
      storeCorrect = True
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  Routine Prac2
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        prac2_list = []
      End Routine:
        prac2_list.append(Prac2_resp.corr)

        prac2_trials.addData('prac2_list', prac2_list)
    TextComponent Prac2_fix
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter
      text = +
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    ImageComponent Prac2_stim
      image [set every repeat] = $pink_stim
      size = (1.5, 0.3)
      startVal [time (s)] = $jitter
      stopVal [duration (s)] = 2
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    KeyboardComponent Prac2_resp
      allowedKeys = 'lctrl','return'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = $jitter
      stopVal [duration (s)] = 2
      storeCorrect = True
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  Routine Task2
    TextComponent Task2_fix
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter
      text = +
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    ImageComponent Task2_stim
      image [set every repeat] = $pink_stim
      size = (1.5, 0.3)
      startVal [time (s)] = $jitter
      stopVal [duration (s)] = 2
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    KeyboardComponent Task2_resp
      allowedKeys = 'lctrl','return'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = $jitter
      stopVal [duration (s)] = 2
      storeCorrect = True
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  Routine Prac3
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        prac3_list = []
      End Routine:
        prac3_list.append(Prac3_resp.corr)

        prac3_trials.addData('prac3_list', prac3_list)
    TextComponent Prac3_fix
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter
      text = +
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    ImageComponent Prac3_pic
      image [set every repeat] = $mix_stim
      size = (1.5, 0.3)
      startVal [time (s)] = $jitter
      stopVal [duration (s)] = 2
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    KeyboardComponent Prac3_resp
      allowedKeys = 'lctrl','return'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = $jitter
      stopVal [duration (s)] = 2
      storeCorrect = True
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  Routine Task3
    TextComponent Task3_fix
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter
      text = +
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    ImageComponent Task3_stim
      image [set every repeat] = $mix_stim
      size = (1.5, 0.3)
      startVal [time (s)] = $jitter
      stopVal [duration (s)] = 2
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    KeyboardComponent Task3_resp
      allowedKeys = 'lctrl','return'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = $jitter
      stopVal [duration (s)] = 2
      storeCorrect = True
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  Routine finished
    ImageComponent Tak_pic
      image = thank.jpg
      startVal [time (s)] = 0.0
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    KeyboardComponent tak_cont
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Prac1_over
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:

        if sum(prac1_list[-4:]) > 2 :
            pic = 'well_done.jpg'
            msg = 'Træningen er slut. Godt klaret!'

        if not sum(prac1_list[-4:]) > 2 :
            pic = 'try_again.jpg'
            msg = 'Lad os træne en gang mere.'

        if sum(prac1_list[-4:]) > 2 :
            prac1_repeat.finished = True

        if len(prac1_list) > 10 and sum(prac1_list[-4:]) < 3 :
            pic = 'well_done.jpg'
            msg = 'Træningen er slut. Godt klaret!'
    ImageComponent Prac1_over_pic
      image [set every repeat] = $pic
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent Prac1_over_text
      color = black
      letterHeight = 0.04
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg
      wrapWidth = 4
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    KeyboardComponent Prac1_over_cont
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Prac2_over
    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:

        if sum(prac2_list[-4:]) > 2 :
            pic = 'well_done.jpg'
            msg = 'Træningen er slut. Godt klaret!'

        if not sum(prac2_list[-4:]) > 2 :
            pic = 'try_again.jpg'
            msg = 'Lad os træne en gang mere.'

        if sum(prac2_list[-4:]) > 2 :
            prac2_repeat.finished = True

        if len(prac2_list) > 10 and sum(prac2_list[-4:]) < 3 :
            pic = 'well_done.jpg'
            msg = 'Træningen er slut. Godt klaret!'
    ImageComponent Prac2_over_pic
      image [set every repeat] = $pic
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent Prac2_over_text
      color = black
      letterHeight = 0.04
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg
      wrapWidth = 4
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    KeyboardComponent Prac2_over_cont
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Prac3_over
    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:

        if sum(prac3_list[-8:]) > 5 :
            pic = 'well_done.jpg'
            msg = 'Træningen er slut. Godt klaret!'

        if not sum(prac3_list[-8:]) > 5 :
            pic = 'try_again.jpg'
            msg = 'Lad os træne en gang mere.'

        if sum(prac3_list[-8:]) > 5 :
            prac3_repeat.finished = True

        if len(prac3_list) > 20 and sum(prac3_list[-8:]) < 5 :
            pic = 'well_done.jpg'
            msg = 'Træningen er slut. Godt klaret!'
    ImageComponent Prac3_over_pic
      image [set every repeat] = $pic
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent Prac3_over_text
      color = black
      letterHeight = 0.1
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg
      wrapWidth = 4
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    KeyboardComponent Prac3_over_cont
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Prac1_instr1
    TextComponent Prac1_instruc1_text
      color = black
      letterHeight = 0.04
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      wrapWidth = 4
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      text:
        Når fisken er BLÅ er den sultne fisk i midten

        Du fodrer den midterste fisk ved at trykke i den side som fisken kigger mod
        Her kigger den midterste fisk den her vej, så du trykker i venstre side!
    ImageComponent Prac1_instruc1_pic
      image = bluedemo.bmp
      pos = (0, -0.2)
      size = (0.9, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_3
      allowedKeys = 'lctrl'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Prac1_start
    TextComponent Pract1_instr_text
      color = black
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text = Lad os træne! 
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    KeyboardComponent Prac1_cont
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Prac1_instruc1
    TextComponent text
      color = black
      letterHeight = 0.04
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
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      text:
        Når fisken er BLÅ er den sultne fisk i midten.
        Du fodrer den midterste fisk ved at trykke i den side  som fisken kigge mod
        Her kigger den midterste den her vej, så du trykker i venstre side!
    ImageComponent image
      image = bluedemo.bmp
      pos = (0, -0.2)
      size = (0.9, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Prac1_instruc2
    TextComponent Prac1_ins_text
      color = black
      letterHeight = 0.04
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      wrapWidth = 4
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      text:
        Nogle gange er den MIDTERSTE fisk helt alene!
        Der skal du stadig trykke i den retning som den kigger mod
    ImageComponent Prac1_instruc_pic1
      image = blue_nod_R.bmp
      pos = (0, 0.2)
      size = (1.4, 0.25)
      startVal [time (s)] = 0.0
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    TextComponent Prac1_instruc2_text2
      color = black
      letterHeight = 0.04
      pos = (0, -0.03)
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        Nogle gange er den MIDTERSTE fisk sammen med andre, som svømmer i med andre som svømmer i en anden retning
        Der skal du stadig trykke i den retning som den kigger mod
    ImageComponent Prac1_instric2_pic2
      image = blue_neut_L.bmp
      pos = (0, -0.25)
      size = (1.4, 0.25)
      startVal [time (s)] = 0.0
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    TextComponent Prac1_instruc2_text3
      color = black
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Du skal fodre den MIDTERSTE fisk! 
      wrapWidth = 4
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    KeyboardComponent key_resp_2
      allowedKeys = 'lctrl'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Prac2_instr1
  Routine Prac2_instr2
    ImageComponent Prac2_instruc_pic1
      image = pink_nod_R.bmp
      pos = (0, 0.2)
      size = (1.5, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent Prac2_instruc2_text1
      color = black
      letterHeight = 0.04
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      wrapWidth = 4
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      text:
        Nogle gange er der ingen fisk i midten!
        Der skal du stadig trikke i den retning de YDERSTE fisk kigger mod
    ImageComponent Prac2_instr2_pic2
      image = pink_neut_L.bmp
      pos = (0, -0.205)
      size = (1.5, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent Prac2_instru2_text2
      color = black
      letterHeight = 0.04
      pos = (0, 0.0)
      startVal [time (s)] = 0.0
      wrapWidth = 4
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      text:
        Nogle gange svømmer midterste fisk i en helt anden retning
        Der skal du stadig trykke i den retning som de YDERSTE fisk kigger mod
    TextComponent Prac2_instru2_text3
      color = black
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Du skal fodre de YDERSTE fisk
      wrapWidth = 4
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    KeyboardComponent key_resp_5
      allowedKeys = 'lctrl'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Prac2_instr_1
    TextComponent Pract2_instr_text1
      color = black
      letterHeight = 0.04
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      wrapWidth = 4
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      text:
        Når fiskene er PINK er de sultne fisk i siderne.
        Du fodrer de yderste fisk ved at trykke i den side de kigger mod.
        Her kigger de yderste fisk den vej, så du skal trykke i højre side!
    ImageComponent Pract2_instr_pic
      image = pinkdemo.bmp
      size = (0.9, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent Prac2_cont
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent Prac2_instruc1_text2
      color = black
      letterHeight = 0.04
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      wrapWidth = 4
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      text:
        Lad is spille kun med de PINK fisk
        Du skal fodre de yderste fisk ved at trykke i højre side
  Routine Prac2_start
    TextComponent Parc2_start_text
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text = Lad os træne
      wrapWidth = 4
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    KeyboardComponent key_resp_4
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Task1_end
    TextComponent text_2
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        FLOT!
        Nu kommer der en ny regel
    KeyboardComponent task1_end_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Task2_end
    TextComponent text_3
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      wrapWidth = 4
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      text:
        Det var SUPER!

        Nu skal du spille spillet med BEGGE farver
        Så det er vigtigt at du husker reglerne
    KeyboardComponent key_resp_6
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Prac3_instr2
    TextComponent text_4
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text = Lads os træne
      wrapWidth = 4
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    KeyboardComponent key_resp_7
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine welcome
  LoopInitiator prac1_repeat loopType="TrialHandler"
    conditionsFile = blue_prac_all.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'prac_file': 'blue_prac1.xlsx'},
      {'prac_file': 'blue_prac2.xlsx'},
      {'prac_file': 'blue_prac3.xlsx'}]
    Routine Prac1_instr1
    Routine Prac1_instruc2
    Routine Prac1_start
    LoopInitiator prac1_trials loopType="TrialHandler"
      conditionsFile = $prac_file
      loopType = sequential
      nReps = 1
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      Routine Prac1
    LoopTerminator prac1_trials
    Routine Prac1_over
  LoopTerminator prac1_repeat
  Routine Task1_instr
  LoopInitiator task1_trials loopType="TrialHandler"
    conditionsFile = blue_task.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'blue_stim': 'blue_con_R.bmp', 'corrAns': 'return'},
      {'blue_stim': 'blue_inc_R.bmp', 'corrAns': 'return'},
      {'blue_stim': 'blue_nod_R.bmp', 'corrAns': 'return'},
      {'blue_stim': 'blue_inc_L.bmp', 'corrAns': 'lctrl'},
      {'blue_stim': 'blue_inc_L.bmp', 'corrAns': 'lctrl'},
      {'blue_stim': 'blue_con_R.bmp', 'corrAns': 'return'},
      {'blue_stim': 'blue_neut_L.bmp', 'corrAns': 'lctrl'},
      {'blue_stim': 'blue_inc_L.bmp', 'corrAns': 'lctrl'},
      {'blue_stim': 'blue_nod_L.bmp', 'corrAns': 'lctrl'},
      {'blue_stim': 'blue_inc_R.bmp', 'corrAns': 'return'},
      {'blue_stim': 'blue_inc_L.bmp', 'corrAns': 'lctrl'},
      {'blue_stim': 'blue_neut_R.bmp', 'corrAns': 'return'},
      {'blue_stim': 'blue_inc_R.bmp', 'corrAns': 'return'},
      {'blue_stim': 'blue_con_L.bmp', 'corrAns': 'lctrl'},
      {'blue_stim': 'blue_inc_R.bmp', 'corrAns': 'return'},
      {'blue_stim': 'blue_inc_R.bmp', 'corrAns': 'return'},
      {'blue_stim': 'blue_con_L.bmp', 'corrAns': 'lctrl'}]
    Routine Task1
  LoopTerminator task1_trials
  Routine Task1_end
  LoopInitiator prac2_repeat loopType="TrialHandler"
    conditionsFile = pink_prac_all.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'prac_file': 'pink_prac1.xlsx'},
      {'prac_file': 'pink_prac2.xlsx'},
      {'prac_file': 'pink_prac3.xlsx'}]
    Routine Prac2_instr_1
    Routine Prac2_instr2
    Routine Prac2_start
    LoopInitiator prac2_trials loopType="TrialHandler"
      conditionsFile = $prac_file
      loopType = sequential
      nReps = 1
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      Routine Prac2
    LoopTerminator prac2_trials
    Routine Prac2_over
  LoopTerminator prac2_repeat
  Routine Task2_instr
  LoopInitiator task2_trials loopType="TrialHandler"
    conditionsFile = pink_task.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'pink_stim': 'pink_con_L.bmp', 'corrAns': 'lctrl'},
      {'pink_stim': 'pink_con_R.bmp', 'corrAns': 'return'},
      {'pink_stim': 'pink_inc_L.bmp', 'corrAns': 'lctrl'},
      {'pink_stim': 'pink_inc_R.bmp', 'corrAns': 'return'},
      {'pink_stim': 'pink_neut_L.bmp', 'corrAns': 'lctrl'},
      {'pink_stim': 'pink_neut_R.bmp', 'corrAns': 'return'},
      {'pink_stim': 'pink_nod_L.bmp', 'corrAns': 'lctrl'},
      {'pink_stim': 'pink_nod_R.bmp', 'corrAns': 'return'}]
    Routine Task2
  LoopTerminator task2_trials
  Routine Task2_end
  LoopInitiator prac3_repeat loopType="TrialHandler"
    conditionsFile = mix_prac_all.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'prac_file': 'mix_prac1.xlsx'},
      {'prac_file': 'mix_prac2.xlsx'},
      {'prac_file': 'mix_prac3.xlsx'}]
    Routine Prac3_instr
    Routine Prac3_instr2
    LoopInitiator prac3_trials loopType="TrialHandler"
      conditionsFile = $prac_file
      loopType = sequential
      nReps = 1
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      Routine Prac3
    LoopTerminator prac3_trials
    Routine Prac3_over
  LoopTerminator prac3_repeat
  Routine Task3_instr
  LoopInitiator task3_trials loopType="TrialHandler"
    conditionsFile = mix_task.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'mix_stim': 'blue_con_L.bmp', 'corrAns': 'lctrl'},
      {'mix_stim': 'blue_con_R.bmp', 'corrAns': 'return'},
      {'mix_stim': 'blue_inc_L.bmp', 'corrAns': 'lctrl'},
      {'mix_stim': 'blue_inc_R.bmp', 'corrAns': 'return'},
      {'mix_stim': 'blue_neut_L.bmp', 'corrAns': 'lctrl'},
      {'mix_stim': 'blue_neut_R.bmp', 'corrAns': 'return'},
      {'mix_stim': 'blue_nod_L.bmp', 'corrAns': 'lctrl'},
      {'mix_stim': 'blue_nod_R.bmp', 'corrAns': 'return'},
      {'mix_stim': 'pink_con_L.bmp', 'corrAns': 'lctrl'},
      {'mix_stim': 'pink_con_R.bmp', 'corrAns': 'return'},
      {'mix_stim': 'pink_inc_L.bmp', 'corrAns': 'lctrl'},
      {'mix_stim': 'pink_inc_R.bmp', 'corrAns': 'return'},
      {'mix_stim': 'pink_neut_L.bmp', 'corrAns': 'lctrl'},
      {'mix_stim': 'pink_neut_R.bmp', 'corrAns': 'return'},
      {'mix_stim': 'pink_nod_L.bmp', 'corrAns': 'lctrl'},
      {'mix_stim': 'pink_nod_R.bmp', 'corrAns': 'return'}]
    Routine Task3
  LoopTerminator task3_trials
  Routine finished
